PsychoPy2experiment version="2024.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 0.5294, 0.5294, 0.5294
  expName = posner_endo_new1
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructions_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!




        INSTRUCTIONS:

        Breathe deeply and regularly throughout the experiment.
        Hold your breath for a second right after each inhalation and exhalation.
        Rest the index finger of your dominant hand on the space bar throughout the experiment.

        You will see a fixation cross. Keep looking directly at the fixation cross at all times.

        Then a black star will randomly appear either on the left or on the right.

        Please press the space bar as quickly as possible whenever you see the black star.
        But don't press the space bar if there is no star - this will occasionally happen.
    KeyboardComponent key_control
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready
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    TextComponent ready_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ready
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  Routine fix
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    KeyboardComponent key_control2
      allowedKeys = 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fixation_cross
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = +
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  Routine target
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    ImageComponent star
      image = target_star.png
      pos [set every repeat] = (target_x, target_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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    TextComponent fixation_cross_target
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine break_2
    RoutineSettingsComponent break_2
      stopVal [duration (s)] = 60
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let's have a break!
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    KeyboardComponent key_control3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine ready
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': 10}]
    Routine fix
    Routine target
  LoopTerminator practice
  Routine ready
  LoopInitiator session_1 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_y': 0.005, 'target_x': 0.31},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31}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
    Routine fix
    Routine target
  LoopTerminator session_1
  Routine break_2
  Routine ready
  LoopInitiator session_2 loopType="TrialHandler"
    conditionsFile = conditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': 0.31},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005},
      {'target_y': 0.005, 'target_x': -0.31},
      {'target_y': 10, 'target_x': 0.005},
      {'target_y': -0.31, 'target_x': 0.005},
      {'target_y': 0.31, 'target_x': 0.005}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
    Routine fix
    Routine target
  LoopTerminator session_2
