PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 0.5294, 0.5294, 0.5294
  expName = posner_endo_new1
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructions_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!




        INSTRUCTIONS:

        Breathe deeply and regularly throughout the experiment.
        Hold your breathe for a second right after each inhalation and exhalation.
        Rest the index finger of your dominant hand on the space bar throughout the experiment.

        You will see a fixation cross with two boxes. Keep looking directly at the fixation cross at all times.

        One of the two boxes will flicker for a short time.
        Then a black star might randomly appear either in the upper or in the lower box.

        Please press the space bar as quickly as possible whenever you see the black STAR.
        But don't press the space bar if there is no star - this will occasionally happen.
    KeyboardComponent key_control
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready
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    TextComponent ready_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
      text = ready
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  Routine fix
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    ImageComponent fixation
      image = fixation.png
      size = (0.182, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_control2
      allowedKeys = 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fixation_cross
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = +
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  Routine cue
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    ImageComponent cube
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $cue_img
      size = (0.182, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    TextComponent fixation_cross_cue
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      text = +
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  Routine target
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    ImageComponent star
      image = target_star.png
      pos [set every repeat] = (0.005, target_y)
      size = (0.1, 0.1)
      startVal [time (s)] = $cue_soa
      stopVal [duration (s)] = 2.0
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    ImageComponent fixation_target
      image = fixation.png
      size = (0.182, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent fixation_cross_target
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine break_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Let's have a break!
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    KeyboardComponent key_control3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine ready
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'valid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 10, 'trial': 'catch'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'valid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'valid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'valid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'valid'}]
    Routine fix
    Routine cue
    Routine target
  LoopTerminator practice
  Routine ready
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 10, 'trial': 'catch'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 10, 'trial': 'catch'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'valid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'valid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'valid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'valid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 10, 'trial': 'catch'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'invalid'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': -0.31, 'trial': 'valid'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 10, 'trial': 'catch'},
      {'cue_img': 'cube_r.png', 'cue_soa': 0.1, 'target_y': 10, 'trial': 'catch'},
      {'cue_img': 'cube_l.png', 'cue_soa': 0.1, 'target_y': 0.31, 'trial': 'invalid'}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
    Routine fix
    Routine cue
    Routine target
  LoopTerminator block1
  Routine break_2
  Routine ready
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine cue
    Routine target
  LoopTerminator block2
